opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: metformin_resistant_KEIO_library
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p50_single: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  (Retired) TipOne 96 Tip Rack 200 µL: {definitionId: opentrons/tipone_96_tiprack_200ul/1, slot: 1}
  Corning 384 Well Plate 112 µL Flat: {definitionId: opentrons/corning_384_wellplate_112ul_flat/1, slot: 4}
  Bio-Rad 96 Well Plate 200 µL PCR: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 5}
pipetteTiprackAssignments:
  p50_single: opentrons/tipone_96_tiprack_200ul/1
ingredients:
  - keio_lib
  - LB plate
ingredLocations:
  Corning 384 Well Plate 112 µL Flat:
    keio_lib {volume: 50}: A1-P1, A2-P2, A3-P3, A4-P4, A5-P5, A6-P6, A7-P7, A8-P8, A9-P9, A10-P10, A11-P11, A12-P12, A13-P13, A14-P14, A15-P15, A16-P16, A17-P17, A18-P18, A19-P19, A20-P20, A21-P21, A22-P22, A23-P23, A24-P24
  Bio-Rad 96 Well Plate 200 µL PCR:
    LB plate {volume: 150}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: N5, N6, F10, D19, I21
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-A5
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 1 finished!
    Please change to Plate 2
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: E4, D8, E11, C14, D18, C20, B22
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A6-A12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: G7, P8, F16, G16, E20, F24
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B1-B6
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 2 finished!
    Please change to Plate 3
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: N10, E14
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B7, B8
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 3 finished!
    Please change to Plate 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: J22
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B9
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 4 finished!
    Please change to plate 5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: G4
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B10
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 5 finished!
    Please change to plate 6
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: F14, G14
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B11, B12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: H4, H5, L10
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C1-C3
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 6 finished!
    Change to plate 7
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: G1, K1, F8, G8, L8, F9, K14, F21
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C4-C11
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 7 finished!
    Change to plate 8
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: C1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: E1, H1, L1, H5, E9, E11, D13, I13, C21, M23
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: D1-D10
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 8 finished!
    Change to plate 9
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: B4, A13
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: D11, D12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: K4, E18
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E1, E2
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 9 finished!
    Change to plate 10
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: E10, K10, C11, G16
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E3-E6
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 10 finished!
    Change to plate 11
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: K2, A3, C3, K4, H7, F24
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E7-E12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: N2
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: F1
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 11 finished!
    Change to plate 12
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: K13
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: F2
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 12 finished!
    Change to plate 13 (last one!)
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Corning 384 Well Plate 112 µL Flat
  aspirate_wells: G8, C12
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 35
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: F3, F4
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p50_single, labware: (Retired) TipOne 96 Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p50_single, volume: 35, labware: Corning 384 Well Plate 112 µL Flat, well: D19, offsetFromBottomMm: 1, flowRate: 25}
- dispense: {pipette: p50_single, volume: 35, labware: Corning 384 Well Plate 112 µL Flat, well: D19, offsetFromBottomMm: 1, flowRate: 50}
- aspirate: {pipette: p50_single, volume: 5, labware: Corning 384 Well Plate 112 µL Flat, well: D19, offsetFromBottomMm: 1, flowRate: 25}
- dispense: {pipette: p50_single, volume: 5, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: A1, offsetFromBottomMm: 0.5, flowRate: 50}
- dropTip: {pipette: p50_single, labware: Trash, well: A1}
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